PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Lexicon decision task
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent dis_1
      image = image1.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent dis_2
      image = image2.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 3.0
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    ImageComponent dis_3
      image = image3.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 3.0
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  Routine test
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = Now, there are the words and non-words you will encounter. Click left arrow key if it is a word and right arrow key if it a non-word. 
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    TextComponent words
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      text [set every repeat] = $Words
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    KeyboardComponent key_resp
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = lexicon decision task conditions.xlsx
    loopType = fullRandom
    nReps = 10
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    conditions:
      [{'Words': 'schema'},
      {'Words': 'superego'},
      {'Words': 'anxiety'},
      {'Words': 'Bipolar'},
      {'Words': 'Heauristic'},
      {'Words': 'Amnesia'},
      {'Words': 'Anchoring'},
      {'Words': 'Priming'},
      {'Words': 'Conformity'},
      {'Words': 'chilren'},
      {'Words': 'attenion'},
      {'Words': 'aptide'},
      {'Words': 'mdness'},
      {'Words': 'bas'},
      {'Words': 'attenuation'},
      {'Words': 'dioder'},
      {'Words': 'parlysis'},
      {'Words': 'beavior'}]
    Routine test
  LoopTerminator trials
